load_file("nrngui.hoc")
ndend = 2
create soma, dend[ndend]
access soma

soma nseg=1
soma diam=18.8
soma L = 18.8
soma Ra=100.0

insert hh
soma gnabar_hh = 0.25
insert pas


dend[0] { nseg = 5 diam = 3.18 L = 701.9 Ra = 100 insert pas }
dend[1] { nseg = 5 diam = 2.0 L = 549.1 Ra = 100 insert pas }

// Connect things together
connect dend[0](0), soma(0)
connect dend[1](0), soma(1)

// create an electrode in the soma
objectvar electrode

soma electrode = new IClamp(0.5)

soma electrode.del = 100
soma electrode.dur = 100
soma electrode.amp = 0.5 //note this is higher than in previous section

print soma.v
dt = 0.025
tstop = 300
v_init = -65

objref g
g = new Graph()
g.size(0, tstop, -80, 40)
g.addvar("soma.v(0.5)", &soma.v(0.5), 3,2)
g.addvar("dend[0].v(0.5)", &dend[0].v(0.5), 6,1)

graphList[0].append(g)

run()